PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stim_cola
  keyboardBackend = ioHub
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Routines
  Routine hi
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Hello,

        Just watch the images and it will record lol
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine im
    ImageComponent image
      image [set every repeat] = $img
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.9, -0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $trials.thisN
      units = norm
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  Routine gn
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text = Thanks for the data
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wt
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text [set every frame] = $f"Перерыв 7.5с {str(int(t))}"
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Flow
  Routine hi
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = file2.csv
      loopType = random
      nReps = 2
      random seed = 2
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      conditions:
        [OrderedDict([('img', 'lays/lays1.jpg')]),
        OrderedDict([('img', 'lays/lays1.jpg')]),
        OrderedDict([('img', 'lays/lays2.png')]),
        OrderedDict([('img', 'lays/lays3.png')]),
        OrderedDict([('img', 'lays/lays4.png')]),
        OrderedDict([('img', 'lays/lays5.png')]),
        OrderedDict([('img', 'lays/lays6.png')]),
        OrderedDict([('img', 'lays/lays7.png')])]
      Routine im
    LoopTerminator trials
    Routine wt
  LoopTerminator trials_2
  Routine gn
