PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stim_faces
  keyboardBackend = ioHub
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Routines
  Routine hi
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hi!

        Rate images with y/n on the keyboard as quickly as possible. This will provide data for the EEG!
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine im
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    ImageComponent image
      image [set every repeat] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine gn
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text = Thanks for the data
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine hi
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = file.csv
    loopType = random
    nReps = 50
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    conditions:
      [OrderedDict([('img', 'ffhq/69806.jpg')]),
      OrderedDict([('img', 'ffhq/69812.jpg')]),
      OrderedDict([('img', 'ffhq/69621.jpg')]),
      OrderedDict([('img', 'ffhq/69635.jpg')]),
      OrderedDict([('img', 'ffhq/69609.jpg')]),
      OrderedDict([('img', 'ffhq/69423.jpg')]),
      OrderedDict([('img', 'ffhq/69437.jpg')]),
      OrderedDict([('img', 'ffhq/69594.jpg')]),
      OrderedDict([('img', 'ffhq/69580.jpg')]),
      OrderedDict([('img', 'ffhq/69557.jpg')]),
      OrderedDict([('img', 'ffhq/69543.jpg')]),
      OrderedDict([('img', 'ffhq/69796.jpg')]),
      OrderedDict([('img', 'ffhq/69782.jpg')]),
      OrderedDict([('img', 'ffhq/69972.jpg')]),
      OrderedDict([('img', 'ffhq/69966.jpg')]),
      OrderedDict([('img', 'ffhq/69755.jpg')]),
      OrderedDict([('img', 'ffhq/69741.jpg')]),
      OrderedDict([('img', 'ffhq/69999.jpg')]),
      OrderedDict([('img', 'ffhq/69769.jpg')]),
      OrderedDict([('img', 'ffhq/69768.jpg')]),
      OrderedDict([('img', 'ffhq/69998.jpg')]),
      OrderedDict([('img', 'ffhq/69740.jpg')]),
      OrderedDict([('img', 'ffhq/69754.jpg')]),
      OrderedDict([('img', 'ffhq/69967.jpg')]),
      OrderedDict([('img', 'ffhq/69973.jpg')]),
      OrderedDict([('img', 'ffhq/69783.jpg')]),
      OrderedDict([('img', 'ffhq/69797.jpg')]),
      OrderedDict([('img', 'ffhq/69542.jpg')]),
      OrderedDict([('img', 'ffhq/69556.jpg')]),
      OrderedDict([('img', 'ffhq/69581.jpg')]),
      OrderedDict([('img', 'ffhq/69595.jpg')]),
      OrderedDict([('img', 'ffhq/69436.jpg')]),
      OrderedDict([('img', 'ffhq/69422.jpg')]),
      OrderedDict([('img', 'ffhq/69608.jpg')]),
      OrderedDict([('img', 'ffhq/69634.jpg')]),
      OrderedDict([('img', 'ffhq/69620.jpg')]),
      OrderedDict([('img', 'ffhq/69813.jpg')])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
    Routine im
  LoopTerminator trials
  Routine gn
